<?xml version="1.0" encoding="ISO-8859-1"?>
    <config>

        <!-- The starting directory. -->
        <directory type="directory">M:/Data/CurrentAcquisition</directory>

        <!-- The setup name -->
        <setup_name type="string">Lightsheet</setup_name>

        <!-- The ui type, this is 'classic' or 'detached' -->
        <ui_type type="string">classic</ui_type>

        <!--
            This has two effects:

            (1) If this is True any exception will immediately crash HAL, which can
            be useful for debugging. If it is False then some exceptions will be
            handled by the modules.

            (2) If it is False we also don't check whether messages are valid.
        -->
        <strict type="boolean">True</strict>

        <!-- Define the modules to use for this setup. -->
		
        <modules>

        <!-- This is the main window, you must have this. -->
        <hal>
            <module_name type="string">storm_control.hal4000.hal4000</module_name>
            <class_name type="string">HalController</class_name>
        </hal>

        <!-- You also need all of these.-->

        <!-- Camera display. -->
        <display>
            <class_name type="string">Display</class_name>
            <module_name type="string">storm_control.hal4000.display.display</module_name>
            <parameters>
                <!-- The default color table. Other options are in hal4000/colorTables/all_tables -->
                <colortable type="string">ramp.ctbl</colortable>
            </parameters>
        </display>

        <!-- Feeds. -->
        <feeds>
            <class_name type="string">Feeds</class_name>
            <module_name type="string">storm_control.hal4000.feeds.feeds</module_name>
        </feeds>

        <!-- Filming and starting/stopping the camera. -->
        <film>
            <class_name type="string">Film</class_name>
            <module_name type="string">storm_control.hal4000.film.film</module_name>

            <!-- Film parameters specific to this setup go here. -->
            <parameters>
                <extension desc="Movie file name extension" type="string" values=",Red,Green,Blue"></extension>
            </parameters>
        </film>

        <!-- Which objective is being used, etc. -->
        <mosaic>
            <class_name type="string">Mosaic</class_name>
            <module_name type="string">storm_control.hal4000.mosaic.mosaic</module_name>

            <!-- List objectives available on this setup here. -->
            <parameters>
                <flip_horizontal desc="Flip image horizontal (mosaic)" type="boolean">True</flip_horizontal>
                <flip_vertical desc="Flip image vertical (mosaic)" type="boolean">False</flip_vertical>
                <transpose desc="Transpose image (mosaic)" type="boolean">True</transpose>
                <objective desc="Current objective" type="string" values="obj1,obj2">obj1</objective>
                <obj1 desc="Objective 1" type="custom">60x,0.108,0.0,0.0</obj1>
                <obj2 desc="Objective 2" type="custom">10x,0.65,0.0,0.0</obj2>
            </parameters>
        </mosaic>

        <!-- Loading, changing and editting settings/parameters -->
        <settings>
            <class_name type="string">Settings</class_name>
            <module_name type="string">storm_control.hal4000.settings.settings</module_name>
        </settings>

        <!-- Set the time base for films. -->
        <timing>
            <class_name type="string">Timing</class_name>
            <module_name type="string">storm_control.hal4000.timing.timing</module_name>
            <parameters>
                <time_base type="string">camera1</time_base>
            </parameters>
        </timing>

        <!--
            Everything else is optional, but you probably want at least one camera.
        -->

        <!-- Camera control. -->
        <!--
            Note that the cameras must have the names "camera1", "camera2", etc..
            Cameras are either "master" (they provide their own hardware timing)
            or "slave" they are timed by another camera. Each time the cameras
            are started the slave cameras are started first, then the master cameras.
        -->
        <camera1>
            <class_name type="string">Camera</class_name>
            <module_name type="string">storm_control.hal4000.camera.camera</module_name>
            <camera>
                <master type="boolean">True</master>
                <class_name type="string">HamamatsuCameraControl</class_name>
                <module_name type="string">storm_control.hal4000.camera.hamamatsuCameraControl</module_name>
                <parameters>

                    <!-- Which camera to use -->
                    <camera_id type="int">0</camera_id>

                    <!-- These are the display defaults, not the camera range. -->
                    <default_max type="int">1000</default_max>
                    <default_min type="int">0</default_min>
                    <flip_horizontal type="boolean">True</flip_horizontal>
                    <flip_vertical type="boolean">False</flip_vertical>
                    <transpose type="boolean">True</transpose>

                    <!-- These can be changed / editted. -->
                    <!-- This is the extension to use (if any) when saving data from this camera. -->
                    <!--<extension type="string">c1</extension> -->

                    <!-- Whether or not data from this camera is saved during filming. -->
                    <saved type="boolean">True</saved>
                </parameters>
            </camera>
        </camera1>
   
		<!-- Stage control GUI -->
		<stage>
		  <class_name type="string">Stage</class_name>
		  <module_name type="string">storm_control.hal4000.stage.stage</module_name>
		  <configuration>
			<stage_functionality type="string">tiger_controller.xy_stage</stage_functionality>
		  </configuration>
		</stage>

		<!-- Tiger stage controller. -->
		<tiger_controller>
		  <module_name type="string">storm_control.sc_hardware.appliedScientificInstrumentation.tigerModule</module_name>
		  <class_name type="string">TigerController</class_name>

		  <configuration>
			<baudrate type="int">115200</baudrate>
			<port type="string">COM3</port>
			<ttl_mode type="int">22</ttl_mode>	
			<devices>
			  <xy_stage>
				<velocity type="float">7.5</velocity>
			  </xy_stage>
			  
			  <z_piezo>
				<parameters>
				  <center type="float">400.0</center>
				  <has_center_bar type="boolean">True</has_center_bar>
				  <maximum type="float">500.0</maximum>
				  <minimum type="float">0.0</minimum>
				  <warning_high type="float">490.0</warning_high>
				  <warning_low type="float">10.0</warning_low>
				</parameters>
				<ao_fn_name type="string">daq.tigerz.ao_task</ao_fn_name>
				<axis type="string">P</axis>
				<microns_to_volts type="float">0.02</microns_to_volts>
				<mode type="int">1</mode>
			  </z_piezo>
			 
			  <z_stage>
				<center type="float">0.0</center>
				<has_center_bar type="boolean">True</has_center_bar>
				<maximum type="float">10000.0</maximum>
				<minimum type="float">-10000.0</minimum>
				<warning_high type="float">9000.0</warning_high>
				<warning_low type="float">-9000.0</warning_low>	    
			  </z_stage>
			 
			  <o3_stage>
				<center type="float">0.0</center>
				<has_center_bar type="boolean">True</has_center_bar>  
			  </o3_stage> 
			  
			</devices>
		  </configuration>
		</tiger_controller>
      
		<!-- Z stage control GUI. -->
		<z_stage>
		  <class_name type="string">ZStage</class_name>
		  <module_name type="string">storm_control.hal4000.miscControl.zStage</module_name>
		  <configuration>
			<z_stage_fn type="string">tiger_controller.z_stage</z_stage_fn>
			<large_step type="float">1.0</large_step>
			<retracted_z type="float">-1000.0</retracted_z>
			<small_step type="float">0.05</small_step>	
		  </configuration>
		</z_stage>
		
		<!-- o3 stage control GUI. -->
		<o3_stage>
		  <class_name type="string">o3Stage</class_name>
		  <module_name type="string">storm_control.hal4000.miscControl.o3Stage</module_name>
		  <configuration>
			<o3_stage_fn type="string">tiger_controller.o3_stage</o3_stage_fn>
			<large_step type="float">1.0</large_step>
			<retracted_o3 type="float">1000.0</retracted_o3>
			<small_step type="float">0.05</small_step>	
		  </configuration>
		</o3_stage>
		
		<!-- Galvo control GUI. -->
		<galvoview>
		  <class_name type="string">Galvo</class_name>
		  <module_name type="string">storm_control.hal4000.miscControl.galvoGUI1D</module_name>
		  <configuration>
			<galvo_fn type="string">galvo</galvo_fn>
			<large_step type="float">10.0</large_step>
			<small_step type="float">1.0</small_step>	
		  </configuration>
		</galvoview>
		
		<!-- Galvo control --> 
		<galvo>
		  <module_name type="string">storm_control.hal4000.miscControl.galvoControl1D</module_name>
		  <class_name type="string">galvoModule</class_name>
		  <configuration>
			<ao_fn_name type="string">daq.galvo1.ao_task</ao_fn_name>
			<maximum type="float">1000.0</maximum> <!-- in mV -->
	        	<minimum type="float">-1000.0</minimum>
			<scan type="string">-80, 380, 4, 1</scan> <!-- Format = start, stop, step, channels -->
			<used_during_filming type="boolean">True</used_during_filming>
		  </configuration>
		</galvo>

		<!-- TCP control -->
        <tcp_control>
            <module_name type="string">storm_control.hal4000.tcpControl.tcpControl</module_name>
            <class_name type="string">TCPControl</class_name>
            <configuration>
                <parallel_mode type="boolean">True</parallel_mode>
                <tcp_port type="int">9000</tcp_port>
            </configuration>
        </tcp_control>
		
		<!-- Crystal Technologies AOTF (Telnet) -->
		
			<ctech_aotf>
			  <module_name type="string">storm_control.sc_hardware.crystalTechnologies.aotfModule</module_name>
			  <class_name type="string">AOTF64BitModule</class_name>
			  <configuration>
				<use_fsk type="boolean">True</use_fsk>
				<fsk_mode type="int">1</fsk_mode>
				<python32_exe type="string">C:\Users\Zhuang\anaconda3_32\python.exe</python32_exe>

				<ch750>
				  <maximum type="int">8000</maximum>
				  <channel type="int">0</channel>
				  <off_frequency type="float">20.0</off_frequency> 
				  <on_frequency type="float">76.44</on_frequency>   Frequency for 750 
				</ch750>

				<ch647>
				  <maximum type="int">8000</maximum>
				  <channel type="int">1</channel>
				  <off_frequency type="float">20.0</off_frequency> 
				  <on_frequency type="float">91.08</on_frequency>   Frequency for 647 
				</ch647>
				
				<ch560>
				  <maximum type="int">8000</maximum>
				  <channel type="int">2</channel>
				  <off_frequency type="float">20.0</off_frequency>
				  <on_frequency type="float">109.02</on_frequency>  Frequency for 560
				</ch560>

				<ch488>
				  <maximum type="int">9000</maximum>
				  <channel type="int">3</channel>
				  <off_frequency type="float">20.0</off_frequency>
				  <on_frequency type="float">131.20</on_frequency>  Frequency for 488 
				</ch488>
				
				
			  <used_during_filming type="boolean">True</used_during_filming>
			  </configuration>
			</ctech_aotf>
		
	
		<!-- Coherent OBIS 405 laser control. -->
		<obis405>
		  <module_name type="string">storm_control.sc_hardware.coherent.coherentModule</module_name>
		  <class_name type="string">CoherentObis</class_name>
		  <configuration>
			<port type="string">COM13</port>
			<used_during_filming type="boolean">True</used_during_filming>
		  </configuration>
		</obis405> 
		
		
		<!-- Illumination (lasers, shutters, etc) control GUI. -->
        <illumination>
            <class_name type="string">Illumination</class_name>
            <module_name type="string">storm_control.hal4000.illumination.illumination</module_name>
            <configuration>
				
                <ch1>
                    <gui_name type="string">750</gui_name>
                    <color type="string">200,0,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>ctech_aotf.ch750</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ch750.do_task</hw_fn_name>
                    </digital_modulation>
                </ch1>
                <ch2>
                    <gui_name type="string">647</gui_name>
                    <color type="string">255,0,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>ctech_aotf.ch647</hw_fn_name>
                    </amplitude_modulation> 
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ch647.do_task</hw_fn_name>
                    </digital_modulation>
                </ch2>
                <ch3>
                    <gui_name type="string">560</gui_name>
                    <color type="string">124,252,0</color>
                    <amplitude_modulation>
                        <hw_fn_name>ctech_aotf.ch560</hw_fn_name>
                    </amplitude_modulation>
                    <digital_modulation>
                        <hw_fn_name type="string">daq.ch560.do_task</hw_fn_name>
                    </digital_modulation>
                </ch3>
                <ch4>
                    <gui_name type="string">488</gui_name>
                    <color type="string">0,191,255</color>
                    <amplitude_modulation>
                        <hw_fn_name>ctech_aotf.ch488</hw_fn_name>
                    </amplitude_modulation>

                    <digital_modulation>
                        <hw_fn_name type="string">daq.ch488.do_task</hw_fn_name>
                    </digital_modulation>
                </ch4>
                <ch5>
                    <gui_name type="string">405</gui_name>
                    <color type="string">0,0,255</color>
		    <amplitude_modulation>
				<hw_fn_name>obis405</hw_fn_name>
		    </amplitude_modulation>
                    <digital_modulation>
                        	<hw_fn_name type="string">daq.ch405.do_task</hw_fn_name>
                     </digital_modulation>
                </ch5> 

            </configuration>
        </illumination>
     
		<!-- DAQ control -->
		<daq>
			<module_name type="string">storm_control.sc_hardware.nationalInstruments.nidaqModule</module_name>
			<class_name type="string">NidaqModule</class_name>
			<configuration>
				<!-- This is the default timing source to use while filming. "Oversampled"
					 films will use the counter for timing. The counter is driven by the
					 camera fire pin. Other films will just use the camera fire pin directly.
				-->

				<timing>
					<camera_fire_pin type="string">/Dev1/PFI12</camera_fire_pin>
					<counter type="string">/Dev1/ctr2</counter>
					<rising_edge type="boolean">True</rising_edge>  
				</timing>
				
				<galvo1>
				  <ao_task>
					<source type="string">/Dev1/ao0</source>
				  </ao_task>
				</galvo1>

				<ch750>
				  <do_task>
	    				<source type="string">/Dev1/port0/line8</source>
	  			  </do_task>
				</ch750>

				<ch647>
				  <do_task>
	    				<source type="string">/Dev1/port0/line9</source>
	  			  </do_task>
				</ch647>
				
				<ch560>
				  <do_task>
	    				<source type="string">/Dev1/port0/line10</source>
	  			  </do_task>
				</ch560>

				<ch488>
				  <do_task>
	    				<source type="string">/Dev1/port0/line11</source>
	  			  </do_task>
				</ch488>

                <ch405>
				  <do_task>
	    				<source type="string">/Dev1/port0/line12</source>
	  			  </do_task>
				</ch405>
				
				<tigerz>
                    <ao_task>
                        <source type="string">/Dev1/ao1</source>
                    </ao_task>
                </tigerz>
				
				
			</configuration>
		</daq>
		
		<!-- Thorlabs UC480 camera for the focus lock 
         <uc480_camera>
            <class_name type="string">UC480Camera</class_name>
            <module_name type="string">storm_control.sc_hardware.thorlabs.ucScientificCameraModule</module_name>
            <configuration>
                <parameters>
                    <offset_has_center_bar type="boolean">True</offset_has_center_bar>
                    <offset_maximum type="float">2000.0</offset_maximum>
                    <offset_minimum type="float">-2000.0</offset_minimum>
                    <offset_warning_high type="float">1000.0</offset_warning_high>
                    <offset_warning_low type="float">-1000.0</offset_warning_low>
                    <sum_maximum type="float">400000.0</sum_maximum>
                    <sum_minimum type="float">100000.0</sum_minimum>
                    <sum_warning_low type="float">150000.0</sum_warning_low>
                </parameters>
                <background type="int">500</background>
                <camera_id type="int">1</camera_id>
                <ini_file type="string">uc480_settings.ini</ini_file>
                <offset_file type="string">C:\Users\Zhuang\storm_control\storm_control\hal4000\xml\Aditya\cam_offsets.txt</offset_file>
                <sigma type="float">4</sigma>
                <uc480_dll type="string">C:\Windows\System32\uc480_64.dll</uc480_dll>
                <x_width type="int">400</x_width>
                <y_width type="int">100</y_width>
                <use_storm_analysis type="boolean">True</use_storm_analysis>
                <units_to_microns type="float">-0.05</units_to_microns> 
                <pixel_clock type="int">5</pixel_clock> 
				
                 Units_to microns: negative is because in the current setup the spots 
                    get closer as the objective approaches the coverslip. It should be positive 
                    if the spots get apart as the objective approaches the coverslip
             </configuration>
        </uc480_camera> -->

		<!-- Decided on no IR control -->
         <none_irlaser>
          <module_name type="string">storm_control.sc_hardware.none.noneIRLaserModule</module_name>
          <class_name type="string">NoneIRLaserModule</class_name>
        </none_irlaser>
		
        <!-- Focus lock control GUI.
        <focuslock>
            <class_name type="string">FocusLock</class_name>
            <module_name type="string">storm_control.hal4000.focusLock.focusLock</module_name>
            <configuration>
                <ir_laser type="string">none_irlaser</ir_laser>
                <ir_power type="int">10</ir_power>
                <lock_modes type="string">NoLockMode,AutoLockMode,AlwaysOnLockMode,OptimalLockMode,CalibrationLockMode,HardwareZScanLockMode</lock_modes>
                <qpd type="string">uc480_camera</qpd>
                <z_stage type="string">tiger_controller.z_piezo</z_stage>
                <parameters>
                    <find_sum>
                        <step_size type="float">2.0</step_size>
                    </find_sum>
                    <locked>
                        <lock_gain type='float'>1.0</lock_gain>
                        <lock_gain_max type='float'>1.0</lock_gain_max>
                        <buffer_length type="int">5</buffer_length>
                        <offset_threshold type="float">50</offset_threshold>
                    </locked>
                    <scan>  
						<scan_range type='float'>100.0</scan_range>
                        <minimum_sum type="float">10000</minimum_sum>
                        <scan_step type="float">0.10</scan_step>
						<z_center type="float">400.0</z_center>
                        <offset_threshold type="float">100</offset_threshold>
                    </scan>
                    <jump_size type="float">2.0</jump_size>
                </parameters>
            </configuration>
        </focuslock>
		
		 -->
		</modules>

    </config>
